PsychoPy2experiment version="2022.2.2"
Settings
  Data file delimiter = comma
  Experiment info = {'participant': '', 'session': '001', 'ucl': '0', 'skip': '0', 'study_id': '', 'ver_control': ''}
  Force stereo = False
  Full-screen window = False
  Monitor = testMonitor
  Save csv file = True
  Screen = 1
  Show info dlg = False
  Units = norm
  Window size (pixels) = [1920, 1080]
  expName = LetterTask_subpts
  keyboardBackend = ioHub
  logging level = debug
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Routines
  Routine inst
    TextComponent upperMsg1
      color = black
      letterHeight = 0.08
      pos = (0, 0.80)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Welcome to the experiment. 
      wrapWidth = 1.7
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    TextComponent upperMsg2
      color = black
      letterHeight = 0.065
      pos = (0, 0.65)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = On each trial, we will show you a few letters, for example: 
      wrapWidth = 1.7
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    TextComponent example1
      color = black
      letterHeight = 0.15
      pos = (0, 0.50)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = X F A B
      wrapWidth = 1.7
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    TextComponent midMsg1
      color = black
      letterHeight = 0.065
      pos = (0, 0.35)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Please order these letters alphabetically in your mind. In this case: 
      wrapWidth = 2
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    TextComponent example2
      color = black
      letterHeight = 0.15
      pos = (0, 0.20)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = A B F X
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    TextComponent text
      color = black
      letterHeight = 0.065
      pos = (0, -0.25)
      saveStartStop = False
      startVal [time (s)] = 0.0
      wrapWidth = 1.7
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      text:
        and remember this sequence of letters.

        We will then show you one of the letters, and you should tell us at what alphabetical position that letter is.

        For instance, if we show you 'B',  you should press the number 2 on your keyboard. If we show you 'X', you should press the number 4 on your keyboard.

        If you respond correctly, you will advance to the next sequence. However, if incorrect response is made, you will be asked to repeat the same sequence again. You will repeat until a correct response is made.
    TextComponent rightnext
      color = black
      letterHeight = 0.05
      pos = (0.65, -0.8)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Right Arrow Key: Next Page 
      wrapWidth = 1.5
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    KeyboardComponent key_resp
      allowedKeys = 'right','esc'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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  Routine setup
    CodeComponent setup_code
      Code Type = Both
      Before Experiment:
        from numpy.random import uniform
        from math import sqrt
        con_file = "".join(["conditionsheets/contingency_",str(randint(1,100)),".csv"])
      Before JS Experiment:
        var con_file, inst_loop_n, rewFB, p_change, t_roll, rewDur, encoding_t,choice_t,fb_t;
        function getRandomInt(min, max) {
          min = Math.ceil(min);
          max = Math.floor(max);
          return Math.floor(Math.random() * (max - min)) + min;
        }
        con_file = "".concat("conditionsheets/contingency_", getRandomInt(1, 100), ".csv");
      Begin JS Experiment:
        psychoJS.downloadResources([
          { name: con_file, path: con_file}
          ]);
      End JS Routine:
        var ver_control
        if ((expInfo["skip"] === "1")) {
            inst_loop_n = 0;
        } else {
            inst_loop_n = 1;
        }

        if ((expInfo["ucl"] === "1")) {
            run_nih_consent = 0;
        } else {
            run_nih_consent = 1;
        }
        ver_control = expInfo["ver_control"]
        psychoJS.experiment.addData("ver_control", ver_control);
      End Routine:
        if expInfo['skip']=='1':
            inst_loop_n = 0
        else:
            inst_loop_n = 1

        if expInfo['ucl']=='1':
            run_nih_consent = 0
        else:
            run_nih_consent = 1

        thisExp.addData('ver_control', expInfo['ver_control'])
  Routine trial
    CodeComponent code_2
      Code Type = Both
      Begin JS Routine:
        t_isi = getRandomInt(500, 800)/1000;
        encoding_t = Math.sqrt(N);
        choice_t = 3;
        fb_t = 1
        psychoJS.experiment.addData("ISI", t_isi);
      Begin Routine:
        t_isi = uniform(0.5,0.8)
        encoding_t = sqrt(N);
        choice_t = 3;
        fb_t = 1
        thisExp.addData('ISI', t_isi)
      End JS Routine:
        psychoJS.experiment.addData("contingency", con_file);
        psychoJS.experiment.addData("list_og", list_og);
        psychoJS.experiment.addData("list_sort", list_sort);
        psychoJS.experiment.addData("rewMag", rewMag);
        psychoJS.experiment.addData("ViewDura", 5);
      End Routine:
        thisExp.addData('contingency', con_file)
        thisExp.addData('list_og', list_og)
        thisExp.addData('list_sort', list_sort)
        thisExp.addData('rewMag', rewMag)
        thisExp.addData('ViewDura', 5)
    TextComponent preorder
      color = black
      letterHeight = 0.35
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = encoding_t
      text [set every repeat] = $list_og
      wrapWidth = 5
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    TextComponent assist
      color = black
      letterHeight = 0.05
      pos = (0, 0.7)
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = encoding_t
      text = Alphabetize...
      wrapWidth = 5
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    TextComponent ISI_fix
      color = black
      letterHeight = 0.2
      startVal [time (s)] = encoding_t
      stopVal [duration (s)] = t_isi
      text [set every repeat] = +
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    TextComponent letter
      color = black
      letterHeight = 0.4
      startVal [time (s)] = encoding_t +t_isi
      stopVal [duration (s)] = choice_t
      text [set every repeat] = $target_letter
      wrapWidth = 3
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    TextComponent testMsgUpper
      color = black
      letterHeight = 0.07
      pos = (0, 0.6)
      saveStartStop = False
      startVal [time (s)] = encoding_t +t_isi
      stopVal [duration (s)] = choice_t
      text = After alphabetization, what is the position of ...
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    TextComponent testMsgLower
      color = black
      letterHeight = 0.07
      pos = (0, -0.6)
      saveStartStop = False
      startVal [time (s)] = encoding_t+t_isi
      stopVal [duration (s)] = choice_t
      text = Use numeric key to make a response.
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    KeyboardComponent TargetResp
      allowedKeys = '1','2','3','4','5','6','7','8','9'
      correctAns = $cor_pos
      forceEndRoutine = True
      startVal [time (s)] = encoding_t+t_isi
      stopVal [duration (s)] = choice_t
      store = first key
      storeCorrect = True
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    TextComponent debug
      disabled = True
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = encoding_t
      text [set every repeat] = $encoding_t
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  Routine fixation_cross
    CodeComponent ITI_code
      Code Type = Both
      Begin JS Routine:
        dur_fixcross = getRandomInt(300, 1000)/1000;
        psychoJS.experiment.addData("ITI", dur_fixcross);
      Begin Routine:
        dur_fixcross = uniform(0.3,1)
        thisExp.addData('ITI', dur_fixcross)
    TextComponent fixation2
      color = black
      letterHeight = 0.3
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = dur_fixcross
      text [set every frame] = +
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  Routine feedback
    CodeComponent code
      Code Type = Both
      Begin JS Routine:
        fbtextpos = [0, 0.13];
        rewDur = 1;
        p_change = 10;
        rewFB = "10 Pts";
        if ((! TargetResp.keys)) {
            feedbacktext = "No Answer\nYou lose";
            fbColor = [0.73, 0.73, 0.674];
        } else {
            if (TargetResp.corr) {
                feedbacktext = "Correct! \nYou win";
                fbColor = [0.65, 0.8118, 0.545];
                rewFB = rewT;
                rep_trial.finished = true;
                psychoJS.experiment.addData("reward_points", rewPts);
            } else {
                feedbacktext = "Oops! Incorrect\nYou lose";
                fbColor = [0.8667, 0.5137, 0.513725];
            }
        }
      Begin Routine:
        fbtextpos = [0,0.13]
        rewDur = 1;
        p_change = 10;
        rewFB = "10 Pts";
        if not TargetResp.keys :
            feedbacktext="No Answer\nYou lose"
            fbColor = [0.73,0.73,0.674]
        elif TargetResp.corr:
            feedbacktext="Correct! \nYou win"
            fbColor = [0.65,0.8118,0.545]
            rewFB = rewT
            rep_trial.finished = True
            thisExp.addData('reward_points', rewPts)
        else:
            feedbacktext="Oops! Incorrect\nYou lose"
            fbColor = [0.8667,0.5137,0.513725]
    PolygonComponent polygon
      fillColor [set every repeat] = $fbColor
      lineColor [set every repeat] = $[1,1,1]
      saveStartStop = False
      shape = rectangle
      size = (0.8, 0.65)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1
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    TextComponent fb1
      color = black
      letterHeight = 0.15
      pos [set every repeat] = fbtextpos
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1
      text [set every repeat] = $feedbacktext
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    TextComponent rewTxt
      color = black
      letterHeight = 0.25
      pos = (0, -0.15)
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = rewDur
      text [set every repeat] = $rewFB
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  Routine mood_rate
    TextComponent ScaleMsgTop
      color = black
      letterHeight = 0.07
      pos = (0, 0.65)
      startVal [time (s)] = 0.0
      text = Use the following scale to indicate your current mood:
      wrapWidth = 1.5
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    TextComponent ScaleMsgMain
      letterHeight = 0.1
      pos = (0, 0.4)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = How happy are you currently?
      wrapWidth = 1.5
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    TextComponent ScaleMsgSec
      color = black
      letterHeight = 0.07
      pos = (0, 0.15)
      startVal [time (s)] = 0.0
      text = Use your mouse to select
      wrapWidth = 1.5
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    SliderComponent slider
      forceEndRoutine = True
      granularity = 0.01
      labels = "Unhappy","Happy"
      letterHeight = 0.05
      pos = (0, -0.4)
      size = (1.0, 0.1)
      startVal [time (s)] = 0.0
      styles = ['rating']
      ticks = (0,1, 2, 3, 4, 5,6,7,8,9,10)
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  Routine end
    TextComponent ending_text
      color = black
      letterHeight = 0.1
      startVal [time (s)] = 0.0
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      text:
        Thank you for your participation!

        Press space bar to close the experiment. You will be redirected to get your compensation.
    KeyboardComponent key_resp_2
      allowedKeys = 'esc','space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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  Routine consent
    TextComponent con_sec_title
      color = black
      letterHeight = 0.08
      pos = (0, 0.8)
      startVal [time (s)] = 0.0
      text [set every repeat] = $sectitle
      wrapWidth = 1
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    TextComponent con_main
      color = black
      letterHeight = 0.08
      startVal [time (s)] = 0.0
      text [set every repeat] = $mainconsent
      wrapWidth = 1.5
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    TextComponent con_keytext
      color = black
      letterHeight = 0.06
      pos = (0, -0.8)
      startVal [time (s)] = 0.0
      text [set every repeat] = $keytext
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    KeyboardComponent key_resp_3
      allowedKeys = 'space'
      correctAns = y
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = first key
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    CodeComponent code_3
      Code Type = Auto->JS
  Routine IncompleteEnd
    TextComponent sur_end
      color = black
      letterHeight = 0.1
      startVal [time (s)] = 0.0
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      text:
        Unfortunately you will have to agree to all statements to continue the study. The study will terminate now.

        Please press space bar to exit.
    KeyboardComponent key_resp_4
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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    CodeComponent code_5
      Code Type = Both
      End JS Routine:
        psychoJS.quit()
      End Routine:
        core.quit();
  Routine statements
    TextComponent st_upper
      color = black
      letterHeight = 0.1
      pos = (0, 0.0)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = $statement
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    TextComponent st_lower
      color = black
      letterHeight = 0.06
      pos = (0, -0.8)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = $assist_st
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    KeyboardComponent st_key
      allowedKeys = 'y','n'
      correctAns = y
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = first key
      storeCorrect = True
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    CodeComponent code_4
      Code Type = Auto->JS
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      End Routine:
        if st_key.corr:
            YesConsent=1;
            noConsent = 0;
        else:
            YesConsent=0;
            noConsent=1;
            st_loop.finished=True;
  Routine Inst_2
    TextComponent Msg1
      color = black
      letterHeight = 0.065
      pos = (0, 0.40)
      saveStartStop = False
      startVal [time (s)] = 0.0
      wrapWidth = 1.7
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      text:
        You will earn the payment listed for this study. In addition, you will also earn “points” for each sequence.

        For each sequence, you will start with some points and you will lose 10 points for every incorrect attempt.

        You will earn the points that’s left when you made a correct response. However, your earnable points will NOT go below 0. That is, you will either earn some points or nothing for each sequnce, never negative points.

        You will win additional bonus payment based on the total points at the end of the study.
    TextComponent Mag2
      color = black
      letterHeight = 0.065
      pos = (0, -0.20)
      saveStartStop = False
      startVal [time (s)] = 0.0
      wrapWidth = 1.7
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      text:
        We will also ask you to rate how happy you are at the end of every trial.

        You will provide your response by clicking on a scale using your mouse.

        When you are ready to start, press SPACE BAR to start.
    TextComponent left2
      color = black
      letterHeight = 0.05
      pos = (-0.65, -0.8)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Left Arrow Key: Previous Page 
      wrapWidth = 1.5
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    TextComponent right2
      color = black
      letterHeight = 0.05
      pos = (0.65, -0.8)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Space bar: Start the Study
      wrapWidth = 1.5
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    KeyboardComponent key_resp_5
      allowedKeys = 'left','space'
      correctAns = space
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
      storeCorrect = True
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    CodeComponent code_6
      Code Type = Auto->JS
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      End Routine:
        if key_resp_5.corr:
            rep_inst.finished = True
  Routine effort_rating
    TextComponent ERateTopMsg
      color = black
      letterHeight = 0.07
      pos = (0, 0.65)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Use the following scale to indicate:
      wrapWidth = 1.5
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    TextComponent ERateMainMsg
      letterHeight = 0.1
      pos = (0, 0.40)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = How much effort did you put in for this trial?
      wrapWidth = 1.5
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    TextComponent ERateSecMsg
      color = black
      letterHeight = 0.07
      pos = (0, 0.15)
      startVal [time (s)] = 0.0
      text = Use your mouse to select
      wrapWidth = 1.5
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    SliderComponent effort_rate
      forceEndRoutine = True
      granularity = 0.01
      labels = "Min","Max"
      letterHeight = 0.05
      pos = (0, -0.4)
      size = (1.0, 0.1)
      startVal [time (s)] = 0.0
      styles = ['rating']
      ticks = (0,1, 2, 3, 4, 5,6,7,8,9,10)
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  Routine break_2
    TextComponent text_2
      color = black
      letterHeight = 0.2
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
      text = +
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  Routine new_sequence_alert
    CodeComponent init_trial
      Code Type = Both
      Begin JS Routine:
        rewPts = rewMag.match(/\d+/);
        rewPts = rewPts.join("");
        p_change = 0;
      Begin Routine:
        rewPts = int("".join(filter(str.isdigit, rewMag)))
        p_change = 0;
    TextComponent text_3
      color = black
      letterHeight = 0.2
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.2
      text = A new sequence is coming up
      wrapWidth = 1.5
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  Routine reward_info
    TextComponent asist_txt_1
      color = black
      letterHeight = 0.1
      pos = (0, 0.4)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1
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      text:
        A new sequence is coming up.

        For this sequence, you could earn up to
    TextComponent text_4
      color = red
      letterHeight = 0.2
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1
      text [set every repeat] = $rewMag
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  Routine end_nih
    TextComponent nih_endtext
      color = black
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      wrapWidth = 1.5
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      text:
        Thank you for your participation!


        Your completion code is:

        3YTZRJZ_00356

        Please enter this code to the MTurk page for validation.

        You may keep this page open while type in the code in the MTurk page.

        Alternatively, you can press SPACE BAR and a message will pop up to allow you to copy this code, and you may paste it there.
    KeyboardComponent nih_esp
      allowedKeys = 'esc','space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
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    CodeComponent code_7
      Code Type = Both
      End JS Routine:
        psychoJS.quit({message: 'The experiment is now complete. Thank you for your participation! Please copy-and-paste the following completion code into MTurk so that we can confirm your participation: 3YTZRJZ_00356'})
      End Routine:
        core.quit()
  Routine reward_t_info
    CodeComponent code_8
      Code Type = Both
      Begin JS Routine:
        rewPts = (rewPts - p_change);
        if ((rewPts < 0)) {
            rewPts = 0;
        }
        rewT = String(rewPts) + " Pts";
      Begin Routine:
        rewPts = rewPts - p_change
        if rewPts <0:
            rewPts = 0

        rewT = "".join([str(rewPts)," Pts"])
    TextComponent rew_tx1
      color = black
      letterHeight = 0.1
      pos = (0, 0.3)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.5
      text = You have 
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    TextComponent rew_main
      color = red
      letterHeight = 0.2
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.5
      text [set every repeat] = $rewT
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    TextComponent text_5
      color = black
      letterHeight = 0.1
      pos = (0, -0.3)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.5
      text = remaining for this sequence
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Flow
  Routine setup
  LoopInitiator rep_inst loopType="TrialHandler"
    conditionsFile = conditionsheets/inst.csv
    isTrials = False
    loopType = sequential
    nReps = 999
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    conditions:
      [OrderedDict([('upperInst1', 'Welcome to this game of letters!'), ('upperInst2', 'In each instance of this game, you will see a string of letters and your task is to first alphabetize then memorize them in order. In different instances, the number of letters might vary.'), ('upperInst3', 'After a brife delay, you would be asked to indicate the position of a letter that was in the string using the numeric keys on your keyboard. '), ('lowerInst', 'Press space bar to continue.')]),
      OrderedDict([('upperInst1', ' When you answered correctly, you will be rewarded some amount of points.'), ('upperInst2', 'The amount of points you win also varies and your actual study compensation would be dependent on the points you have accumulated.'), ('upperInst3', 'When you answered incorrectly or did not provide a response within 6 seconds, you would not lose anything, nor will you win anything.'), ('lowerInst', 'Press space bar to continue.')]),
      OrderedDict([('upperInst1', 'After some instances, you would also be asked to give a rating on your current mood. You can use either mouse or keyboard to provide your answer. '), ('upperInst2', 'There will be muiltiple times where you will rate your mood during this game. '), ('upperInst3', '   '), ('lowerInst', 'WHEN YOU ARE READY TO BEGIN, press space bar.')])]
    LoopInitiator trials_2 loopType="TrialHandler"
      isTrials = False
      loopType = sequential
      nReps = 1
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      Routine inst
    LoopTerminator trials_2
    LoopInitiator trials_3 loopType="TrialHandler"
      isTrials = False
      loopType = sequential
      nReps = 1
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      Routine Inst_2
    LoopTerminator trials_3
  LoopTerminator rep_inst
  LoopInitiator pre_trial_mood loopType="TrialHandler"
    loopType = sequential
    nReps = 1
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    Routine mood_rate
    Routine fixation_cross
  LoopTerminator pre_trial_mood
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = $con_file
    loopType = sequential
    nReps = 1
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    Routine new_sequence_alert
    LoopInitiator rep_trial loopType="TrialHandler"
      loopType = sequential
      nReps = 10
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      Routine reward_t_info
      Routine trial
      Routine feedback
    LoopTerminator rep_trial
    Routine fixation_cross
    Routine mood_rate
    Routine fixation_cross
  LoopTerminator trials
  LoopInitiator nih_end loopType="TrialHandler"
    isTrials = False
    loopType = random
    nReps = run_nih_consent
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    Routine end_nih
  LoopTerminator nih_end
  Routine end
