PsychoPy2experiment version="2022.2.2"
Settings
  Data file delimiter = comma
  Enable Escape = False
  Experiment info = {'participant': '', 'ucl': '0', 'skip': '0'}
  Force stereo = False
  Full-screen window = False
  Monitor = testMonitor
  Save csv file = True
  Screen = 1
  Show info dlg = False
  Units = norm
  Window size (pixels) = [1920, 1080]
  expName = LetterTask_SparseFeedback
  keyboardBackend = ioHub
  logging level = debug
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Routines
  Routine inst
    TextComponent upperMsg1
      color = black
      letterHeight = 0.08
      pos = (0, 0.80)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Welcome to the experiment. 
      wrapWidth = 1.7
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    TextComponent upperMsg2
      color = black
      letterHeight = 0.065
      pos = (0, 0.65)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = On each trial, we will show you a few letters, for example: 
      wrapWidth = 1.7
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    TextComponent example1
      color = black
      letterHeight = 0.15
      pos = (0, 0.50)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = X F A B
      wrapWidth = 1.7
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    TextComponent midMsg1
      color = black
      letterHeight = 0.065
      pos = (0, 0.35)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Please order these letters alphabetically in your mind. In this case: 
      wrapWidth = 2
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    TextComponent example2
      color = black
      letterHeight = 0.15
      pos = (0, 0.20)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = A B F X
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    TextComponent text
      color = black
      letterHeight = 0.065
      pos = (0, -0.25)
      saveStartStop = False
      startVal [time (s)] = 0.0
      wrapWidth = 1.7
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      text:
        and remember this sequence of letters.

        We will then show you one of the letters, and you should tell us at what alphabetical position that letter is.

        For instance, if we show you 'B',  you should press the number 2 on your keyboard. If we show you 'X', you should press the number 4 on your keyboard.

        In most trials, you will not receive feedback on whether your response was correct or not.

        Once in a while, we will show you correct responses count and accuracy percentage. The count and percentage will reset after you see them.
    TextComponent rightnext
      color = black
      letterHeight = 0.05
      pos = (0.65, -0.8)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Right Arrow Key: Next Page 
      wrapWidth = 1.5
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    KeyboardComponent key_resp
      allowedKeys = 'right','esc'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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  Routine setup
    CodeComponent setup_code
      Code Type = Both
      Before Experiment:
        from numpy.random import uniform
        from math import sqrt

        tcount = 0;
        ccount = 0;
      Before JS Experiment:
        var con_file, inst_loop_n, rewPer, tcount, ccount, p_change, t_roll, rewDur, encoding_t,choice_t,fb_t;
        function getRandomInt(min, max) {
          min = Math.ceil(min);
          max = Math.floor(max);
          return Math.floor(Math.random() * (max - min)) + min;
        }

        tcount = 0;
        ccount = 0;
      End JS Routine:
        if ((expInfo["skip"] === "1")) {
            inst_loop_n = 0;
        } else {
            inst_loop_n = 1;
        }

        if ((expInfo["ucl"] === "1")) {
            run_nih_consent = 0;
        } else {
            run_nih_consent = 1;
        }
      End Routine:
        if expInfo['skip']=='1':
            inst_loop_n = 0
        else:
            inst_loop_n = 1

        if expInfo['ucl']=='1':
            run_nih_consent = 0
        else:
            run_nih_consent = 1
  Routine trial
    CodeComponent code_2
      Code Type = Both
      Begin JS Routine:
        t_isi = getRandomInt(500, 800)/1000;
        encoding_t = Math.sqrt(N);
        choice_t = 3;
        fb_t = 1
        psychoJS.experiment.addData("ISI", t_isi);
      Begin Routine:
        t_isi = uniform(0.5,0.8)
        encoding_t = sqrt(N);
        choice_t = 3;
        fb_t = 1
        thisExp.addData('ISI', t_isi)
      End JS Routine:
        tcount = tcount+1;
        if (TargetResp.corr) {
            ccount = ccount + 1;
        }
      End Routine:
        tcount = tcount+1;
        if TargetResp.corr:
            ccount = ccount + 1;
    TextComponent preorder
      color = black
      letterHeight = 0.35
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = encoding_t
      text [set every repeat] = $list_og
      wrapWidth = 5
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    TextComponent assist
      color = black
      letterHeight = 0.05
      pos = (0, 0.7)
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = encoding_t
      text = Alphabetize...
      wrapWidth = 5
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    TextComponent ISI_fix
      color = black
      letterHeight = 0.2
      startVal [time (s)] = encoding_t
      stopVal [duration (s)] = t_isi
      text [set every repeat] = +
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    TextComponent letter
      color = black
      letterHeight = 0.4
      startVal [time (s)] = encoding_t +t_isi
      stopVal [duration (s)] = choice_t
      text [set every repeat] = $target_letter
      wrapWidth = 3
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    TextComponent testMsgUpper
      color = black
      letterHeight = 0.07
      pos = (0, 0.6)
      saveStartStop = False
      startVal [time (s)] = encoding_t +t_isi
      stopVal [duration (s)] = choice_t
      text = After alphabetization, what is the position of ...
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    TextComponent testMsgLower
      color = black
      letterHeight = 0.07
      pos = (0, -0.6)
      saveStartStop = False
      startVal [time (s)] = encoding_t+t_isi
      stopVal [duration (s)] = choice_t
      text = Use numeric key to make a response.
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    KeyboardComponent TargetResp
      allowedKeys = '1','2','3','4','5','6','7','8','9'
      correctAns = $cor_pos
      forceEndRoutine = True
      startVal [time (s)] = encoding_t+t_isi
      stopVal [duration (s)] = choice_t
      store = first key
      storeCorrect = True
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    TextComponent debug
      disabled = True
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = encoding_t
      text [set every repeat] = $encoding_t
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  Routine fixation_cross
    CodeComponent ITI_code
      Code Type = Both
      Begin JS Routine:
        dur_fixcross = getRandomInt(300, 1000)/1000;
        psychoJS.experiment.addData("ITI", dur_fixcross);
      Begin Routine:
        dur_fixcross = uniform(0.3,1)
        thisExp.addData('ITI', dur_fixcross)
    TextComponent fixation2
      color = black
      letterHeight = 0.3
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = dur_fixcross
      text [set every frame] = +
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  Routine feedback
    CodeComponent code
      Code Type = Both
      Begin JS Routine:
        rewPer = Math.round((ccount / tcount) * 1000)/10;
        if (rewPer > 80) {
            fbColor = [0.65, 0.8118, 0.545];
        } else {
            fbColor = [0.8667, 0.5137, 0.513725];
        }
        rewPer = rewPer.toString();
        ccount = ccount.toString();
        tcount = tcount.toString();
      Begin Routine:
        rewPer = round((ccount / tcount)*100,1)
        if rewPer > 80:
            fbColor = [0.65,0.8118,0.545];
        else:
            fbColor = [0.8667,0.5137,0.513725];
        rewPer = str(rewPer)
        ccount = str(ccount)
        tcount = str(tcount)
      End JS Routine:
        tcount=0;
        ccount=0;
      End Routine:
        tcount=0;
        ccount=0;
    PolygonComponent polygon
      fillColor [set every repeat] = $fbColor
      lineColor [set every repeat] = $[1,1,1]
      shape = rectangle
      size = (1, 0.75)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 4
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    TextComponent fb1
      color = black
      letterHeight = 0.15
      pos [set every repeat] = [0,0.13]
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 4
      text [set every repeat] = $'You got ' + ccount + ' / ' + tcount +' correct.' 
      wrapWidth = 1
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    TextComponent rewTxt
      color = black
      letterHeight = 0.15
      pos = (0, -0.15)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 4
      text [set every repeat] = $'Your accuracy rate is ' + rewPer + '%'
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  Routine mood_rate
    TextComponent ScaleMsgTop
      color = black
      letterHeight = 0.07
      pos = (0, 0.65)
      startVal [time (s)] = 0.0
      text = Use the following scale to indicate your current mood:
      wrapWidth = 1.5
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    TextComponent ScaleMsgMain
      letterHeight = 0.1
      pos = (0, 0.4)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = How happy are you currently?
      wrapWidth = 1.5
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    TextComponent ScaleMsgSec
      color = black
      letterHeight = 0.07
      pos = (0, 0.15)
      startVal [time (s)] = 0.0
      text = Use your mouse to select
      wrapWidth = 1.5
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    SliderComponent slider
      forceEndRoutine = True
      granularity = 0.01
      labels = "Unhappy","Happy"
      letterHeight = 0.05
      pos = (0, -0.4)
      size = (1.0, 0.1)
      startVal [time (s)] = 0.0
      styles = ['rating']
      ticks = (0,1, 2, 3, 4, 5,6,7,8,9,10)
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  Routine consent
    TextComponent con_sec_title
      color = black
      letterHeight = 0.08
      pos = (0, 0.8)
      startVal [time (s)] = 0.0
      text [set every repeat] = $sectitle
      wrapWidth = 1
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    TextComponent con_main
      color = black
      letterHeight = 0.08
      startVal [time (s)] = 0.0
      text [set every repeat] = $mainconsent
      wrapWidth = 1.5
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    TextComponent con_keytext
      color = black
      letterHeight = 0.06
      pos = (0, -0.8)
      startVal [time (s)] = 0.0
      text [set every repeat] = $keytext
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    KeyboardComponent key_resp_3
      allowedKeys = 'space'
      correctAns = y
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = first key
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    CodeComponent code_3
      Code Type = Auto->JS
  Routine IncompleteEnd
    TextComponent sur_end
      color = black
      letterHeight = 0.1
      startVal [time (s)] = 0.0
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      text:
        Unfortunately you will have to agree to all statements to continue the study. The study will terminate now.

        Please press space bar to exit.
    KeyboardComponent key_resp_4
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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    CodeComponent code_5
      Code Type = Both
      End JS Routine:
        psychoJS.quit()
      End Routine:
        core.quit();
  Routine statements
    TextComponent st_upper
      color = black
      letterHeight = 0.1
      pos = (0, 0.0)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = $statement
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    TextComponent st_lower
      color = black
      letterHeight = 0.06
      pos = (0, -0.8)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = $assist_st
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    KeyboardComponent st_key
      allowedKeys = 'y','n'
      correctAns = y
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = first key
      storeCorrect = True
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    CodeComponent code_4
      Code Type = Auto->JS
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      End Routine:
        if st_key.corr:
            YesConsent=1;
            noConsent = 0;
        else:
            YesConsent=0;
            noConsent=1;
            st_loop.finished=True;
  Routine Inst_2
    TextComponent Msg1
      color = black
      letterHeight = 0.065
      pos = (0, 0.40)
      saveStartStop = False
      startVal [time (s)] = 0.0
      wrapWidth = 1.7
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      text:
        You will earn the payment listed for this study. In addition, you will also earn “points” for each correct response.

        You will win additional bonus payment based on the total points at the end of the study.
    TextComponent Mag2
      color = black
      letterHeight = 0.065
      pos = (0, -0.20)
      saveStartStop = False
      startVal [time (s)] = 0.0
      wrapWidth = 1.7
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      text:
        We will also ask you to rate how happy you are at the end of every trial.

        You will provide your response by clicking on a scale using your mouse.

        When you are ready to start, press SPACE BAR to start.
    TextComponent left2
      color = black
      letterHeight = 0.05
      pos = (-0.65, -0.8)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Left Arrow Key: Previous Page 
      wrapWidth = 1.5
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    TextComponent right2
      color = black
      letterHeight = 0.05
      pos = (0.65, -0.8)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Space bar: Start the Study
      wrapWidth = 1.5
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    KeyboardComponent key_resp_5
      allowedKeys = 'left','space'
      correctAns = space
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
      storeCorrect = True
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    CodeComponent code_6
      Code Type = Auto->JS
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      End Routine:
        if key_resp_5.corr:
            rep_inst.finished = True
  Routine effort_rating
    TextComponent ERateTopMsg
      color = black
      letterHeight = 0.07
      pos = (0, 0.65)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Use the following scale to indicate:
      wrapWidth = 1.5
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    TextComponent ERateMainMsg
      letterHeight = 0.1
      pos = (0, 0.40)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = How much effort did you put in for this trial?
      wrapWidth = 1.5
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    TextComponent ERateSecMsg
      color = black
      letterHeight = 0.07
      pos = (0, 0.15)
      startVal [time (s)] = 0.0
      text = Use your mouse to select
      wrapWidth = 1.5
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    SliderComponent effort_rate
      forceEndRoutine = True
      granularity = 0.01
      labels = "Min","Max"
      letterHeight = 0.05
      pos = (0, -0.4)
      size = (1.0, 0.1)
      startVal [time (s)] = 0.0
      styles = ['rating']
      ticks = (0,1, 2, 3, 4, 5,6,7,8,9,10)
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  Routine break_2
    TextComponent text_2
      color = black
      letterHeight = 0.2
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
      text = +
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  Routine new_sequence_alert
    TextComponent text_3
      color = black
      letterHeight = 0.2
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.2
      wrapWidth = 1.5
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  Routine reward_info
    TextComponent asist_txt_1
      color = black
      letterHeight = 0.1
      pos = (0, 0.4)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1
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      text:
        A new sequence is coming up.

        For this sequence, you could earn up to
    TextComponent text_4
      color = red
      letterHeight = 0.2
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1
      text [set every repeat] = $rewMag
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  Routine end_nih
    TextComponent nih_endtext
      color = black
      letterHeight = 0.1
      pos = (0, 0.5)
      startVal [time (s)] = 0.0
      wrapWidth = 1.5
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      text:
        Thank you for your participation!


        Your completion code is:
    TextComponent mt_code
      color = black
      font = Arialbd
      letterHeight = 0.2
      startVal [time (s)] = 0.0
      text [set every repeat] = $passcode
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    KeyboardComponent nih_esp
      allowedKeys = 'space'
      correctAns = space
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
      storeCorrect = True
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    CodeComponent code_7
      Code Type = Both
      End JS Routine:
        if (nih_esp.corr) {
            nih_end.finished = true;
        }
        psychoJS.experiment.addData("verify_ID", ID);
      End Routine:
        if nih_esp.corr:
            nih_end.finished = True
        thisExp.addData('verify_ID', ID);
    TextComponent nih_endtext2
      color = black
      letterHeight = 0.1
      pos = (0, -0.5)
      startVal [time (s)] = 0.0
      wrapWidth = 1.5
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      text:
        Please provide this code back to the MTurk page for completion credit. Come back here and press SPACE BAR to close the session after you provided the code.

        Failure to do so might result in forfeiting your compensation.
  Routine reward_t_info
    CodeComponent code_8
      Code Type = Both
      Begin JS Routine:
        rewPts = (rewPts - p_change);
        if ((rewPts < 0)) {
            rewPts = 0;
        }
        rewT = String(rewPts) + " Pts";
      Begin Routine:
        rewPts = rewPts - p_change
        if rewPts <0:
            rewPts = 0

        rewT = "".join([str(rewPts)," Pts"])
    TextComponent rew_tx1
      color = black
      letterHeight = 0.1
      pos = (0, 0.3)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.5
      text = You have 
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    TextComponent rew_main
      color = red
      letterHeight = 0.2
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.5
      text [set every repeat] = $rewT
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    TextComponent text_5
      color = black
      letterHeight = 0.1
      pos = (0, -0.3)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.5
      text = remaining for this sequence
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  Routine end_prolific
    TextComponent ending_text
      color = black
      letterHeight = 0.1
      startVal [time (s)] = 0.0
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      text:
        Thank you for your participation!

        Press space bar to close the experiment. You will be redirected to get your compensation.
    KeyboardComponent key_resp_2
      allowedKeys = 'esc','space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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Flow
  Routine setup
  LoopInitiator rep_inst loopType="TrialHandler"
    isTrials = False
    loopType = sequential
    nReps = 0
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    LoopInitiator page1 loopType="TrialHandler"
      isTrials = False
      loopType = sequential
      nReps = 1
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      Routine inst
    LoopTerminator page1
    LoopInitiator page2 loopType="TrialHandler"
      isTrials = False
      loopType = sequential
      nReps = 1
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      Routine Inst_2
    LoopTerminator page2
  LoopTerminator rep_inst
  LoopInitiator pre_trial_mood loopType="TrialHandler"
    loopType = sequential
    nReps = 0
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    Routine mood_rate
    Routine fixation_cross
  LoopTerminator pre_trial_mood
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = contingency_SR.csv
    loopType = sequential
    nReps = 1
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    conditions:
      [OrderedDict([('list_og', 'F J L N P R T H'), ('list_sort', 'FHJLNPRT'), ('N', 8), ('cor_pos', 2), ('target_letter', 'H'), ('fb_cd', 0)]),
      OrderedDict([('list_og', 'L N V R T P'), ('list_sort', 'LNPRTV'), ('N', 6), ('cor_pos', 2), ('target_letter', 'N'), ('fb_cd', 0)]),
      OrderedDict([('list_og', 'M G I K E O'), ('list_sort', 'EGIKMO'), ('N', 6), ('cor_pos', 3), ('target_letter', 'I'), ('fb_cd', 0)]),
      OrderedDict([('list_og', 'D N H J L F P R'), ('list_sort', 'DFHJLNPR'), ('N', 8), ('cor_pos', 6), ('target_letter', 'N'), ('fb_cd', 0)]),
      OrderedDict([('list_og', 'S U Q'), ('list_sort', 'QSU'), ('N', 3), ('cor_pos', 1), ('target_letter', 'Q'), ('fb_cd', 0)]),
      OrderedDict([('list_og', 'O S U Q'), ('list_sort', 'OQSU'), ('N', 4), ('cor_pos', 1), ('target_letter', 'O'), ('fb_cd', 0)]),
      OrderedDict([('list_og', 'T R P'), ('list_sort', 'PRT'), ('N', 3), ('cor_pos', 3), ('target_letter', 'T'), ('fb_cd', 0)]),
      OrderedDict([('list_og', 'D F H J P L N R T'), ('list_sort', 'DFHJLNPRT'), ('N', 9), ('cor_pos', 5), ('target_letter', 'L'), ('fb_cd', 0)]),
      OrderedDict([('list_og', 'G I K M S O Q U W'), ('list_sort', 'GIKMOQSUW'), ('N', 9), ('cor_pos', 3), ('target_letter', 'K'), ('fb_cd', 0)]),
      OrderedDict([('list_og', 'E G O K M I'), ('list_sort', 'EGIKMO'), ('N', 6), ('cor_pos', 2), ('target_letter', 'G'), ('fb_cd', 0)]),
      OrderedDict([('list_og', 'H L J N P T R V'), ('list_sort', 'HJLNPRTV'), ('N', 8), ('cor_pos', 3), ('target_letter', 'L'), ('fb_cd', 0)])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
    Routine trial
    LoopInitiator fb_logical loopType="TrialHandler"
      loopType = sequential
      nReps = fb_yn
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      Routine feedback
    LoopTerminator fb_logical
    Routine fixation_cross
    Routine mood_rate
    Routine fixation_cross
  LoopTerminator trials
  LoopInitiator nih_end loopType="TrialHandler"
    conditionsFile = code.csv
    loopType = fullRandom
    nReps = 1
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    conditions:
      [OrderedDict([('passcode', 'VYMP_4931'), ('ID', 342805101)]),
      OrderedDict([('passcode', 'IJGI_4540'), ('ID', 414612688)]),
      OrderedDict([('passcode', 'GSJK_8054'), ('ID', 257390294)]),
      OrderedDict([('passcode', 'LZRT_5196'), ('ID', 528949674)]),
      OrderedDict([('passcode', 'DOFE_8757'), ('ID', 342098547)]),
      OrderedDict([('passcode', 'IMCU_0463'), ('ID', 113129783)]),
      OrderedDict([('passcode', 'SZTN_2621'), ('ID', 472991757)]),
      OrderedDict([('passcode', 'SRRI_0753'), ('ID', 573899395)]),
      OrderedDict([('passcode', 'OXAG_1969'), ('ID', 48628734)]),
      OrderedDict([('passcode', 'EMUT_7497'), ('ID', 146722466)]),
      OrderedDict([('passcode', 'VEEN_2207'), ('ID', 696793270)]),
      OrderedDict([('passcode', 'WVXZ_2119'), ('ID', 780695700)]),
      OrderedDict([('passcode', 'UMBB_7078'), ('ID', 772032017)]),
      OrderedDict([('passcode', 'RWTA_5035'), ('ID', 628729128)]),
      OrderedDict([('passcode', 'ZEVY_5967'), ('ID', 567138239)]),
      OrderedDict([('passcode', 'PDAR_5576'), ('ID', 251459680)]),
      OrderedDict([('passcode', 'NKRI_0673'), ('ID', 721491547)]),
      OrderedDict([('passcode', 'JFKV_7763'), ('ID', 224421235)]),
      OrderedDict([('passcode', 'DDTU_6878'), ('ID', 603539519)]),
      OrderedDict([('passcode', 'NDGH_1568'), ('ID', 788505217)]),
      OrderedDict([('passcode', 'IEOU_3068'), ('ID', 441923778)]),
      OrderedDict([('passcode', 'CFNN_5865'), ('ID', 104787759)]),
      OrderedDict([('passcode', 'RQWE_9250'), ('ID', 219451668)]),
      OrderedDict([('passcode', 'HTGI_8824'), ('ID', 105480902)]),
      OrderedDict([('passcode', 'WQUF_8826'), ('ID', 557898798)])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
    Routine end_nih
  LoopTerminator nih_end
